PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'sex': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['dots.js']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1707, 960]
  expName = githubsdt
  keyboardBackend = ioHub
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Routines
  Routine ITI
    RoutineSettingsComponent ITI
      stopVal [duration (s)] = 0.5
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    PolygonComponent BKG_9
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine M1
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    PolygonComponent BKG_1
      fillColor = $[-0.5,-0.5,-0.5]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent Fixation_1
      fillColor = $[1,1,1]
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent Mask
      Code Type = JS
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      Begin JS Routine:
        if (!window.rdkCanvas) {
          const root = document.getElementById("root");
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "10";
          canvas.style.backgroundColor = "transparent";
          root.appendChild(canvas);
          window.rdkCanvas = canvas;

          // 初始化 RDK
          window.rdk = new RDK({
            canvasId: "canvas",
            type: "keypress",
            direction: 0.5,  // 可替换为变量
            coherence: 0.5, // 可替换为变量
            dotColor: "rgb(7, 193, 7)",
            nDots: 300,
            speed: 1.5,
            dotSize: 2,
          });
        }
        // 记录开始时间和持续时长
        window.rdkStart = performance.now();
        window.rdkDuration = parseFloat(TimeDur) * 1000;  // 转成毫秒
        window.rdkRunning = true;

        console.log("✅ M1阶段 RDK 初始化完成，TimeDur =", TimeDur, "秒");
      Each JS Frame:
        if (window.rdkRunning && window.rdk) {
          // 每帧更新 RDK
          window.rdk.updateAndDraw();

          // 检查是否达到 TimeDur 秒
          const elapsed = performance.now() - window.rdkStart;
          if (elapsed >= window.rdkDuration) {
            window.rdkRunning = false;
            continueRoutine = false;
            console.log(`⏱ TimeDur 达成，本轮停止，已运行 ${(elapsed / 1000).toFixed(3)} 秒`);
          }
        } else {
          // fallback: 若 RDK 没有初始化成功
          console.warn("⚠️ RDK 尚未初始化或已停止运行！");
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
        }
        window.rdk = null;
  Routine D
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    PolygonComponent BKG_2
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    DotsComponent dots
      coherence = 1
      color = -1.0000, 0.0039, -1.0000
      dir = 90
      dotLife = 0
      dotSize = 5
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 30
      nDots = 300
      noiseDots = walk
      refreshDots = repeat
      signalDots = same
      speed = 0.035
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = cm
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    PolygonComponent Fixation
      fillColor = $[1,1,1]
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine M2
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    PolygonComponent BKG_3
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
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    PolygonComponent Fixation_3
      disabled = True
      fillColor = $[1,1,1]
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
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    CodeComponent Direction
      Code Type = JS
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      Begin JS Routine:
        let direction = window.trial_direction;

        if (!window.rdkCanvas) {
          const root = document.getElementById("root");
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "10";
          canvas.style.backgroundColor = "transparent";
          root.appendChild(canvas);
          window.rdkCanvas = canvas;
          //  x_scale is  cm → norm，now cm → px
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;  // px/each cm
        let cm_to_px_y = psychoJS.window.size[1] * y_scale;

        let fps = 120;
         //  setting your speed
        let speed = (3.5 * cm_to_px_x) / fps;
        console.log(`📏 fps=${fps} Hz，speed=${speed.toFixed(2)} px/frame`);

          //  RDK
          window.rdk = new RDK({
            canvasId: "canvas",
            type: "keypress",
            direction: direction,  // 可替换为变量
            coherence: parseFloat(Coherence1), // 可替换为变量
            dotColor: "rgb(7, 193, 7)",
            nDots: 360,
            speed: speed ,
            dotSize: 0.03 * cm_to_px_x ,      // ✅ 点大小
          fieldRadius: 3.5 * cm_to_px_x ,  // ✅ 圆半径
            noiseMode: "inertial"
          });
        }
        // 记录开始时间和持续时长
        window.rdkStart = performance.now();
        window.rdkDuration = parseFloat(TimeDur) * 1000;  // 转成毫秒
        window.rdkRunning = true;

        console.log(" M2阶段 RDK 初始化完成，TimeDur =", TimeDur, "秒");
        // 存储这个方向
        psychoJS.experiment.addData('direction', direction);
      Each JS Frame:
        if (window.rdkRunning && window.rdk) {
          // 每帧更新 RDK
          window.rdk.updateAndDraw();

          // 检查是否达到 TimeDur 秒
          const elapsed = performance.now() - window.rdkStart;
          if (elapsed >= window.rdkDuration) {
            window.rdkRunning = false;
            continueRoutine = false;
            console.log(`⏱ TimeDur 达成，本轮停止，已运行 ${(elapsed / 1000).toFixed(3)} 秒`);
          }
        } else {
          // fallback: 若 RDK 没有初始化成功
          console.warn("⚠️ RDK 尚未初始化或已停止运行！");
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
  Routine Response
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    CodeComponent Direction_2
      Code Type = JS
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      Before JS Experiment:
        window.keyDuration_global = 9999;
      Begin JS Routine:
        // ========== 初始化按键变量 ==========
        Key_pressed = false;
        Key_release = false;
        pressStart = null;
        releaseTime = null;
        keyDuration = 9999;
        let direction = window.trial_direction;
        // ========== 清除默认事件，聚焦 ==========
        if (typeof psychoJS !== 'undefined') {
          psychoJS.eventManager.clearEvents();
        }
        window.focus();
        console.log("✅ 获取键盘焦点");

        // ========== 计算屏幕像素密度 ==========
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        let cm_to_px_y = psychoJS.window.size[1] * y_scale;
        let fps = 120;
        let speed = (3.5 * cm_to_px_x) / fps;
        // ========== 创建 canvas 并初始化 RDK（初始白色） ==========
        const root = document.getElementById("root") || document.body;
        if (!window.rdkCanvas) {
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "10";
          canvas.style.backgroundColor = "transparent";
          root.appendChild(canvas);
          window.rdkCanvas = canvas;

          window.rdk = new RDK({
            canvasId: "canvas",
            type: "keypress",
            noiseMode: "inertial",
            direction: direction,
            coherence: parseFloat(Coherence1),
            nDots: 360,
            speed: 0, // 初始不动
            dotSize: 0.03 * cm_to_px_x,
            fieldRadius: 3.5 * cm_to_px_x,
            dotColor: "white"  // ✅ 白色
          });
          console.log("🎬 初始白色 RDK 初始化完成");
        }

        window.rdkStart = performance.now();
        window.rdkDuration = 6000;
        window.rdkRunning = true;

        // ========== 按键事件监听 ==========
        window.keyDownHandler = function(event) {
          if (event.key === "ArrowDown" && !Key_pressed) {
            Key_pressed = true;
            pressStart = performance.now();

            // ✅ 按下后重新初始化为绿色RDK
            window.rdk = new RDK({
              canvasId: "canvas",
              type: "keypress",
              noiseMode: "inertial",
              direction: direction,
              coherence: parseFloat(Coherence1),
              nDots: 360,
              speed: speed,
              dotSize: 0.03 * cm_to_px_x,
              fieldRadius: 3.5 * cm_to_px_x,
              dotColor: "rgb(7, 193, 7)"
            });

            console.log("⬇️ 按下 ↓ 键，RDK 切换为绿色并开始运动");
          }
        };

        window.keyUpHandler = function(event) {
          if (event.key === "ArrowDown" && Key_pressed && !Key_release) {
            Key_release = true;
            releaseTime = performance.now();
            keyDuration = releaseTime - pressStart;
            if (window.rdk) window.rdk.speed = 0;
            console.log("🔴 松开 ↓ 键，keyDuration =", keyDuration.toFixed(2));
          }
        };

        window.addEventListener("keydown", window.keyDownHandler);
        window.addEventListener("keyup", window.keyUpHandler);
        console.log("📥 监听器绑定完成");

        // ========== 每帧更新 ==========
        if (window.rdk && window.rdkRunning) {
          window.rdk.updateAndDraw(true);

          const elapsed = performance.now() - window.rdkStart;

          if (Key_release) {
            continueRoutine = false;
          }

          if (elapsed >= window.rdkDuration && !Key_release) {
            keyDuration = 9999;
            if (window.rdk) window.rdk.speed = 0;
            console.log("⏱ 超时未松开，keyDuration = 9999");
            continueRoutine = false;
          }
        }
      Each JS Frame:
        // 每帧更新 RDK
        if (window.rdk && window.rdkRunning) {
          window.rdk.updateAndDraw(true);

          const elapsed = performance.now() - window.rdkStart;

          if (Key_release) {
            continueRoutine = false;
          }

          if (elapsed >= window.rdkDuration && !Key_release) {
            keyDuration = 9999;
            console.log("⏱ 超时未松开，keyDuration = 9999");
            if (window.rdk) window.rdk.speed = 0;
            continueRoutine = false;
          }
        }
      End JS Routine:
        // 清除监听器
        window.removeEventListener("keydown", window.keyDownHandler);
        window.removeEventListener("keyup", window.keyUpHandler);

        // 移除 canvas
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
        }
        window.rdk = null;

        // 保存数据
        psychoJS.experiment.addData("keyDuration", keyDuration);
        console.log("🧼 Response routine 完成，记录 keyDuration =", keyDuration);
        window.keyDuration_global = keyDuration;
    PolygonComponent BKG_4
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
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  Routine Cue
    RoutineSettingsComponent Cue
      stopVal [duration (s)] = 0.5
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    PolygonComponent BKG_8
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = T
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  Routine Intro
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    PolygonComponent BKG
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
      units = pix
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    ImageComponent Ins_image_2
      image = ins.jpg
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size [set every repeat] = (1.5, 1.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Mask_2
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    PolygonComponent BKG_6
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
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    PolygonComponent Fixation_4
      fillColor = $[1,1,1]
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent Direction_3
      Code Type = JS
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      Begin JS Routine:
        const fps = 120;
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        let speed = (2 * cm_to_px_x) / fps;

        console.log(`📏 帧率=${fps} Hz，速度=${speed.toFixed(2)} px/frame`);


        if (!window.rdkCanvas) {
          const root = document.getElementById("root");
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "10";
          canvas.style.backgroundColor = "transparent";
          root.appendChild(canvas);
          window.rdkCanvas = canvas;
        console.log("🔍 当前 x_scale =", x_scale);  // ✅ 输出 x_scale 的值
          // 初始化 RDK
          // 原来的 x_scale 是 cm → norm单位的比例，现在要转为 cm → 像素
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;  // 每 cm 多少 px
        let cm_to_px_y = psychoJS.window.size[1] * y_scale;



         window.rdk = new RDK({
          canvasId: "canvas",
          type: "mask",
          noiseMode: "walk",
          direction: 0,
          coherence: 0,
          nDots: 360,
          speed: speed,
          dotSize: 0.03 * cm_to_px_x ,      // ✅ 点大小（单位像素）
          fieldRadius: 3.5 * cm_to_px_x ,  // ✅ 圆半径（7cm直径的一半）
          dotColor: "white"
        });

        }
        // 记录开始时间和持续时长
        window.rdkStart = performance.now();
        window.rdkDuration = parseFloat(0.5) * 1000;  // 转成毫秒
        window.rdkRunning = true;

        console.log("✅ M1阶段 RDK 初始化完成，TimeDur =", TimeDur, "秒");
      Each JS Frame:
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      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
  Routine Feedback_Time
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    PolygonComponent BKG_7
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent Initial_Feedback_code_3
      Code Type = JS
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    CodeComponent Feedback_code_5
      Code Type = JS
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      Begin JS Experiment:
        // === 初始化 ===
        PresentDur = 0.5;
        psychoJS.window.mouseVisible = false;

        // 初始化所有圆为白色
        color_1 = [1, 1, 1];
        color_2 = [1, 1, 1];
        color_3 = [1, 1, 1];
        color_4 = [1, 1, 1];
        color_5 = [1, 1, 1];
      Begin JS Routine:
        // 获取响应时间（ms）与目标时间（s）
        let timeResp = window.keyDuration_global;
        let timeTarget = parseFloat(TimeDur);

        let feedbackID = 0;

        if (TrialType === "Time" && timeResp !== 9999) {
            let timeRespSec = timeResp / 1000;
            let diff = timeRespSec - timeTarget;
            let relErr = Math.abs(diff) / timeTarget;

            if (relErr <= 0.05) {
                feedbackID = 3; color_3 = [0, 0.9, 0.3];    // ✅ 正确 ±5%
            } else if (-diff / timeTarget >= 0.3) {
                feedbackID = 1; color_1 = [1, 0, 0];        // ❌ 过早 ≥30%
            } else if (diff / timeTarget >= 0.3) {
                feedbackID = 5; color_5 = [1, 0, 0];        // ❌ 过晚 ≥30%
            } else if (diff / timeTarget >= 0.05) {
                feedbackID = 4; color_4 = [1, 0.3, 0.4];    // ⚠ 稍晚
            } else if (-diff / timeTarget >= 0.05) {
                feedbackID = 2; color_2 = [1, 0.3, 0.4];    // ⚠ 稍早
            }

            console.log(`🧠 Feedback 判定: Resp=${timeRespSec.toFixed(2)}s | Target=${timeTarget}s | relErr=${relErr.toFixed(3)} | ID=${feedbackID}`);
        } else {
            feedbackID = 0;  // 没有松键
            console.log("⚠️ 未松键，反馈 ID = 0");
        }

        // 写入 feedbackID
        psychoJS.experiment.addData("FeedbackID_T", feedbackID);
      End JS Routine:
        keyDuration = 10;
        Key_pressed = false;
        (Key_release === 0);
        color_1 = [1, 1, 1];
        color_2 = [1, 1, 1];
        color_3 = [1, 1, 1];
        color_4 = [1, 1, 1];
        color_5 = [1, 1, 1];

        psychoJS.eventManager.clearEvents({"eventType": "keyboard"});
    PolygonComponent feedback_1_T
      fillColor [set every repeat] = $color_1
      lineColor [set every repeat] = $color_1
      lineWidth = 0.5
      nVertices = 3600
      pos = (-8*x_scale, 0)
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_2_T
      fillColor [set every repeat] = $color_2
      lineColor [set every repeat] = $color_2
      lineWidth = 0.5
      nVertices = 3600
      pos = (-4*x_scale, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_3_T
      fillColor [set every repeat] = $color_3
      lineColor [set every repeat] = $color_3
      lineWidth = 0.5
      nVertices = 3600
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_4_T
      fillColor [set every repeat] = $color_4
      lineColor [set every repeat] = $color_4
      lineWidth = 0.5
      nVertices = 3600
      pos = (4*x_scale, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_5_T
      fillColor [set every repeat] = $color_5
      lineColor [set every repeat] = $color_5
      lineWidth = 0.5
      nVertices = 3600
      pos = (8*x_scale, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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  Routine block
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    CodeComponent Block_code_2
      Code Type = JS
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      Begin JS Experiment:
        psychoJS.window.mouseVisible = false;
        // 替代 Block_trial 的定义
      Begin JS Routine:
        psychoJS.window.mouseVisible = false;

        // 设置方向角
        window.trial_direction = Math.floor(Math.random() * 360);

        // 参数设定
        const blockSize = 54;
        const Practice_num = 1;
        const Block_num = Math.ceil(trials.nTotal / blockSize);

        // 当前全局 trial 编号
        let trialNumber = trials.thisN;  // ✅ 是当前 loop 中真实的执行顺序


        // 当前 block ID（从 0 开始），当前 block 内的 trial index
        let Block_id = Math.floor(trialNumber / blockSize);
        let trial_in_block = trialNumber % blockSize;

        // === 强制记录 Block_id，每轮 trial 都记录 ===
        psychoJS.experiment.addData("Block_id", Block_id);
        console.log(`📋 当前 trialNumber: ${trialNumber}, Block_id: ${Block_id}, trial_in_block: ${trial_in_block}`);

        // === 仅 block 起始 trial 设置提示语，否则跳过 block routine ===
        if (trial_in_block === 0) {
            if (Block_id < Practice_num) {
                Block_text = " Practice will start. Please press 'S' to continue.";
            } else {
                Block_text = `Block (${Block_id - Practice_num + 1} / ${Block_num - Practice_num}) will start. Please press 'S' to continue.`;
            }

            console.log("✅ BlockStart 提示语触发！");
            console.log("📝 Block_text =", Block_text);
        } else {
            Block_text = "false";  // 清空文字
            continueRoutine = false;  // ⛔ 跳过这个 block routine
        }
    TextComponent Block_t_2
      color = black
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0,0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Block_text
      units = norm
      wrapWidth = 1600
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    KeyboardComponent Block_resp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Scale_setup
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    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        psychoJS.window.mouseVisible = false;
        document.body.style.cursor = "none";

        show_keys = 0;
        show_touch = 0;
        if ((expInfo["device type"] === "Touch screen")) {
            show_touch = 1;
        } else {
            show_keys = 1;
        }
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((psychoJS.window.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((psychoJS.window.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
                vsize = psychoJS.window.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
  Routine screen_scale_keys
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    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.window.mouseVisible = false;
        print('key start')
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.1
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      letterHeight = 0.1
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine rectangel_keys
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    TextComponent rectangle_text_keys
      letterHeight = 0.1
      pos = (0, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Press space to continue.
    PolygonComponent polygon_keys
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_keys
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = JS
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      Before JS Experiment:
        console.log("🔍 当前 x_scale =", x_scale);  // ✅ 输出 x_scale 的值
  Routine screen_scale_touch
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    CodeComponent code_scale_touch
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
        text_bottom_touch_text = ' '
      Each Frame:
        click = mouse.clicked_name

        if len(click):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if mouse.isPressedIn(continue_button) and t > 1:
                continueRoutine=False
            elif mouse.isPressedIn(tri_up):
                y_scale=round((y_scale+dscale)*10000)/10000
            elif mouse.isPressedIn(tri_down):
                y_scale=round((y_scale-dscale)*10000)/10000
            elif mouse.isPressedIn(tri_left):
                x_scale=round((x_scale-dscale)*10000)/10000
            elif mouse.isPressedIn(tri_right):
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom_touch_text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm'
            ccimage_touch.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top_touch
      letterHeight = 0.1
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card by clicking/tapping the arrows:
        Up = taller
        Down = shorter
        Left = narrower
        Right = wider
    PolygonComponent tri_up
      fillColor = white
      pos = (-0.55, 0.35)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent tri_down
      fillColor = white
      ori = 180
      pos = (-0.55, 0.2)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent tri_right
      fillColor = white
      ori = 90
      pos = (0.65, 0.3)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent tri_left
      fillColor = white
      ori = 270
      pos = (0.5, 0.3)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent ccimage_touch
      image = bank-1300155_640.png
      size [set every frame] = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = tri_up, tri_down, tri_left, tri_right
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent text_bottom_touch
      letterHeight = 0.05
      pos = (0, -.5)
      startVal [time (s)] = 0.0
      text [set every frame] = $text_bottom_touch_text
      units = norm
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    ImageComponent continue_button
      image = continue.png
      pos = (0.65, -0.45)
      size = (0.25, 0.07)
      startVal [time (s)] = 0.0
      units = height
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  Routine retangle_touch
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    TextComponent rectangle_text_touch
      letterHeight = 0.1
      pos = (0, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Click or touch here to continue.
    PolygonComponent polygon
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_end
      clickable = rectangle_text_touch
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine bye
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        🎉 Experiment Complete 🎉

        Thank you for participating in this experiment!

        Your responses have been successfully recorded.
        If you have any questions or feedback, feel free to contact the experimenter.

        Please press the **spacebar** to exit, or simply close this page.

        Wishing you a great day!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine exit
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please wait while we save your results...
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    CodeComponent code_3
      Code Type = JS
      Before JS Experiment:
        // 🔕 禁止浏览器自动下载结果文件
        psychoJS._saveResults = 0;

        // 📝 生成结果文件名
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // 📊 提取实验数据
        let dataObj = psychoJS._experiment._trialsData;

        // 📄 转换数据为CSV格式
        let data = [Object.keys(dataObj[0])]
          .concat(dataObj.map(it => Object.values(it).toString()))
          .join('\n');

        // 🚀 上传数据到 OSF DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspysch.org/api/data/', {
          method: 'POST',
          headers: {
            'Content-Type': 'application/json',
            'Accept': '*/*',
          },
          body: JSON.stringify({
            experimentId: 'gsfL5F6Yysoa',  // <-- 替换为你自己的 DataPipe ID
            filename: filename,
            data: data,
          })
        })
        .then(response => response.json())
        .then(data => {
          console.log(data);       // 🖥️ 打印服务器返回信息
          quitPsychoJS();          // ✅ 正常退出实验
        });
Flow
  Routine Scale_setup
  LoopInitiator trials_2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = show_keys
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    Routine screen_scale_keys
    Routine rectangel_keys
  LoopTerminator trials_2
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TimeDur', 0.8), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 0.9), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.0), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.1), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.2), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.3), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.4), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.5), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.6), ('Coherence1', 0.3), ('TrialType', 'Time')])]
    Routine block
    Routine ITI
    Routine Mask_2
    Routine M2
    Routine Mask_2
    Routine ITI
    Routine Cue
    Routine Response
    Routine Feedback_Time
  LoopTerminator trials
  Routine exit
